PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'password': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = LDT_v2020
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Routines
  Routine exSetUp
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        currentBlock = 0
        nNotLast = 0
        coins = 0
        corrAnimMov = 'Block1.mp4'
        ncorrectSound = 0
        nincorrectSound = 0
        nhalfway = 0
  Routine fixateOnCrossLex
    PolygonComponent lexCrossStim_b4
      fillColor = $[1,1,1]
      shape = cross
      size = (0.015,0.015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent lexArrowKey_b4
      image = arrowkey_lex.png
      pos = (0, -.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine LexBlock
    PolygonComponent lexCrossStim
      fillColor = $[1,1,1]
      shape = cross
      size = (0.015,0.015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent word_stim
      letterHeight = 0.045
      startVal [time (s)] = .5
      stopVal [duration (s)] = .35
      text [set every repeat] = $words
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    PolygonComponent lexCrossStimAfter
      fillColor = $[1,1,1]
      shape = cross
      size = (0.015,0.015)
      startVal [time (s)] = .85
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    KeyboardComponent lex_resp
      allowedKeys = 'left','right'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = .5
      storeCorrect = True
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    ImageComponent lexArrowKey
      image = arrowkey_lex.png
      pos = (0, -.2)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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  Routine pCorrectSoundCode
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if lex_resp.corr == 1:
           ncorrectSound = 1
           nincorrectSound = 0

        else:
           ncorrectSound = 0
           nincorrectSound = 1
  Routine correctSoundPrac
    SoundComponent coin_sound_2
      sound = coin_sound.wav
      startVal [time (s)] = 0.0
      volume = .5
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    ImageComponent triArrowKeyCorr_2
      image = arrowkey_lex.png
      pos = (0,-.2)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    PolygonComponent lexCrossStimCSound
      fillColor = $[1,1,1]
      shape = cross
      size = (0.015,0.015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine incorrectPrac
    KeyboardComponent incorrectPrac_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent incorrect_image
      image [set every repeat] = $corrpng
      size = [1229,768]
      startVal [time (s)] = 0.0
      units = pix
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    SoundComponent fail_soundPrac
      sound = fail_sound.wav
      startVal [time (s)] = 0.0
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    SoundComponent correction_audio
      sound [set every repeat] = $corrwav
      startVal [time (s)] = 0.0
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  Routine blockSetUp
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        score = 0
        coins = 0
        blockCount = 0
        animMov = 'Block1.mp4'
        unlockMov = 'RogueUnlock1.mp4'
        charUnlockImg = '4instructions1.png'
        charUnlockWav = 'rogueUnlock.wav'
        valleyWav = '25valley.wav'
        valleyImg = '5instructions1.png'
        nPlayEnd = 1
      Begin Routine:
        trialCount = 0
        blockCount = blockCount+1

        if blockCount == 2:
            animMov = 'Block2.mp4'
            unlockMov = 'KnightUnlock2.mp4'
            charUnlockImg = '4instructions2.png'
            charUnlockWav = 'knightUnlock.wav'
            valleyWav = '34valley.wav'
            valleyImg = '5instructions2.png'
        elif blockCount == 3:
            animMov = 'Block3.mp4'
            nPlayEnd = 0
            valleyWav = '34valley.wav'
            valleyImg = '5instructions2.png'
  Routine correctSoundCode
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        trialCount = trialCount+1
        ncorrectSound = 0
        nincorrectSound = 0
        ncorrectAnim = 0
        nhalfway = 0

        if lex_resp.corr == 1:
           ncorrectSound = 1
           score = score + 1

           if score % 10 == 0:
            ncorrectSound = 0
            ncorrectAnim = 1
            coins = coins + 10

           if trialCount == 42:
                ncorrectSound = 0
                ncorrectAnim = 0
                nhalfway = 1

           if trialCount == 84:
                ncorrectSound = 0
                ncorrectAnim = 0
                trialCount = 0

        else:
           nincorrectSound = 1

           if trialCount == 42:
                nincorrectSound = 0
                nhalfway = 1

           if trialCount == 84:
                nincorrectSound = 0
                trialCount = 0
  Routine correctSound
    SoundComponent coin_sound_2lex
      sound = coin_sound.wav
      startVal [time (s)] = 0.0
      volume = .5
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    ImageComponent lexARrowKeyCorr_2
      image = arrowkey_lex.png
      pos = (0, -.2)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    PolygonComponent lexCrossStimCSoundLex
      fillColor = $[1,1,1]
      shape = cross
      size = (0.015,0.015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine inCorrSound
    SoundComponent coin_sound_3
      sound = fail_sound.wav
      startVal [time (s)] = 0.0
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    ImageComponent arrowKeyLexCorr
      image = arrowkey_lex.png
      pos = (0, -.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    PolygonComponent lexCrossStim1
      fillColor = $[1,1,1]
      shape = cross
      size = (0.015,0.015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine blockAnimLoop
    ImageComponent coin_icon
      image = coinicon.png
      pos = (-.05,.3)
      size = (0.075,0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
      units = height
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    TextComponent correctAnimText
      letterHeight = 0.05
      pos = (.025,.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
      text = +10!
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    SoundComponent animCoinSound
      sound = coin_sound.wav
      startVal [time (s)] = 0.0
      volume = .5
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    MovieComponent correctAnimMov
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $animMov
      size = [1.3152,.4776]
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent anim_reset
      Code Type = Auto->JS
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      Begin Routine:
        correctAnimMov.play()
      End Routine:
        correctAnimMov.stop()
  Routine AsymBlock
    PolygonComponent lexCrossStim_2
      fillColor = $[1,1,1]
      shape = cross
      size = (0.015,0.015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    TextComponent word_stim_2
      font = Courier
      letterHeight = 0.045
      pos [set every repeat] = (positionAsymm,0)
      startVal [time (s)] = .5
      stopVal [duration (s)] = .2
      text [set every repeat] = $words
      units = height
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    PolygonComponent lexCrossStimAfter_2
      fillColor = $[1,1,1]
      shape = cross
      size = (0.015,0.015)
      startVal [time (s)] = .70
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    KeyboardComponent lex_resp_asymm
      allowedKeys = 'left','right'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = .5
      storeCorrect = True
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    ImageComponent lexArrowKey_2
      image = arrowkey_lex.png
      pos = (0, -.2)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    TextComponent text
      disabled = True
      font = Courier
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      text = ffffffffffffffffffffffffff
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  Routine charUnlock
    MovieComponent charUnlockMov
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie [set every repeat] = $unlockMov
      size = [200,200]
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent CharUn_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent CharUnlockImg
      image [set every repeat] = $charUnlockImg
      size = (1229,768)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent amountofGold
      color = gold
      letterHeight = 0.035
      pos = (0, .175)
      startVal [time (s)] = 0.0
      text [set every repeat] = $coins
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    SoundComponent charUn_voice
      sound [set every repeat] = $charUnlockWav
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if blockCount == 4:
            continueRoutine=False
  Routine blockSetupAsymm
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        trialCount = 0
        blockCount = blockCount+1
        nPlayEnd = 1
        if blockCount == 4:
            animMov = 'Block3.mp4'
            unlockMov = 'RangerUnlock3.mp4'
            charUnlockImg = '4instructions3.png'
            charUnlockWav = 'rangerUnlock.wav'
            valleyWav = '52valley.wav'
            valleyImg = '5instructions4.png'
        elif blockCount == 5:
            animMov = 'Block4.mp4'
            unlockMov = 'WizardUnlock4.mp4'
            charUnlockImg = '4instructions4.png'
            charUnlockWav = 'wizardUnlock.wav'
            valleyWav = '61valley.wav'
            valleyImg = '5instructions5.png'
        elif blockCount == 6:
            animMov = 'Block5.mp4'
            nPlayEnd = 0
  Routine correctSoundCodeAsym
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        trialCount = trialCount+1
        ncorrectSound = 0
        nincorrectSound = 0
        ncorrectAnim = 0
        nhalfway = 0

        if lex_resp_asymm.corr == 1:
           ncorrectSound = 1
           score = score + 1

           if score % 10 == 0:
            ncorrectSound = 0
            ncorrectAnim = 1
            coins = coins + 20

           if trialCount == 51:
                ncorrectSound = 0
                ncorrectAnim = 0
                nhalfway = 1

           if trialCount == 102:
                ncorrectSound = 0
                ncorrectAnim = 0
                trialCount = 0

        else:
           nincorrectSound = 1

           if trialCount == 51:
                nincorrectSound = 0
                nhalfway = 1

           if trialCount == 102:
                nincorrectSound = 0
                trialCount = 0
  Routine fixateOnCross
    PolygonComponent lexCross_b4
      fillColor = $[1,1,1]
      shape = cross
      size = (0.015, 0.015)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent lexArrowKey_again
      image = arrowkey_lex.png
      pos = (0, -.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine blockAnimLoopAsymm
    ImageComponent coin_icon_2
      image = coinicon.png
      pos = (-.05,.3)
      size = (0.075,0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
      units = height
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    TextComponent correctAnimText_2
      letterHeight = 0.05
      pos = (.025,.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
      text = +20!
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    SoundComponent animCoinSound_2
      sound = coin_sound.wav
      startVal [time (s)] = 0.0
      volume = .5
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    MovieComponent correctAnimMov_2
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $animMov
      size = [1.3152,.4776]
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent anim_reset_2
      Code Type = Auto->JS
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      Begin Routine:
        correctAnimMov_2.play()
      End Routine:
        correctAnimMov_2.stop()
  Routine InnInst
    ImageComponent valleyinst_img
      image = inninstructionsS.png
      size = [1229,768]
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent valley_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent inn_voice
      sound = inn.wav
      startVal [time (s)] = 0.0
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  Routine valleyInst
    ImageComponent valleyinst_image
      image [set every repeat] = $valleyImg
      size = [1229,768]
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent valley_resp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent valley_voice
      sound [set every repeat] = $valleyWav
      startVal [time (s)] = 0.0
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  Routine AsymmInstructionsPlaceHold
    TextComponent text_2
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        Keep your eyes on the center of the screen.
        Words will appear on the left and right of fixation.

        You've unlocked the coin pouch! You will now gain twice the amount of gold for each group of monsters you defeat!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InstLoop
    KeyboardComponent instloop_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    ImageComponent instImg
      image [set every repeat] = $instructionpng
      size = [1229,768]
      startVal [time (s)] = 0.0
      units = pix
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    SoundComponent pageloop
      sound [set every repeat] = $soundwav
      startVal [time (s)] = .3
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  Routine gameEnd
    ImageComponent theEnd_text
      image = 6instructions1.png
      size = (1229,768)
      startVal [time (s)] = 0.0
      units = pix
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    MovieComponent endMov
      backend = moviepy
      forceEndRoutine = False
      movie = GameEND.mp4
      size = [822,298]
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent EndImg
      image = GameENDFinalStaticImage.png
      size = [822,298]
      startVal [time (s)] = 3
      units = pix
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    SoundComponent end_voice
      sound = end.wav
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine clericUnlock
    KeyboardComponent clericUnlock_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent clericUnlockImg
      image = 2instructions1.png
      size = [1229,768]
      startVal [time (s)] = 0.0
      units = pix
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    MovieComponent clericUnlockMov
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = ClericIdleOpening.mp4
      size = [200,200]
      startVal [time (s)] = 0.0
      units = pix
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    SoundComponent clericUnlockWav
      sound = page4.wav
      startVal [time (s)] = 0.0
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  Routine clericConfused
    KeyboardComponent clericConfused_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent clericConfusedImg
      image = newinstructions2.png
      size = [1229,768]
      startVal [time (s)] = 0.0
      units = pix
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    MovieComponent clericConfusedMov
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = clericNoticeProblem.mp4
      size = [200,200]
      startVal [time (s)] = 0.0
      units = pix
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    SoundComponent clericConfusedWav
      sound = newpage2.wav
      startVal [time (s)] = 0.0
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  Routine clericUnscramble
    KeyboardComponent clericResearch_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent clericResearch
      image = newinstructions3.png
      size = [1229,768]
      startVal [time (s)] = 0.0
      units = pix
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    MovieComponent clericResearchMov
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = bookFlipAnim.mp4
      size = [200,200]
      startVal [time (s)] = 0.0
      units = pix
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    SoundComponent clericResearchWav
      sound = newpage3.wav
      startVal [time (s)] = 0.0
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  Routine instructionAnim
    MovieComponent asymmInstMov
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = AsymmInstructionVid.mp4
      size = [1228,768]
      startVal [time (s)] = 0.0
      units = pix
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    SoundComponent asymmInstWav
      sound = newpage4.wav
      startVal [time (s)] = 0.0
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    KeyboardComponent assymInst_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine asymmInstLoop
    KeyboardComponent instloop_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    ImageComponent instImg_2
      image = newinstructions1.png
      size = [1229,768]
      startVal [time (s)] = 0.0
      units = pix
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    SoundComponent pageloop_2
      sound = newpage1.wav
      startVal [time (s)] = .3
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  Routine pCorrectSoundCodeAsymm
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if lex_resp_asymm.corr == 1:
           ncorrectSound = 1
           nincorrectSound = 0

        else:
           ncorrectSound = 0
           nincorrectSound = 1
  Routine beforeAsymmPrac
    KeyboardComponent beforeAsymmPrac_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    ImageComponent beforeAsymmPracImg
      image = 2instructions5.png
      size = [1229,768]
      startVal [time (s)] = 0.0
      units = pix
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    SoundComponent beforeAsymmPracWav
      sound = page8.wav
      startVal [time (s)] = .3
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  Routine ConsentLoop
    KeyboardComponent consent_resp_3
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    ImageComponent consentImg_3
      image [set every repeat] = $instructionpng
      size = [1229,768]
      startVal [time (s)] = 0.0
      units = pix
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  Routine halfwayBreak
    KeyboardComponent halfway_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    ImageComponent halfwayImg
      image [set every repeat] = 8instructions1.png
      size = [1229,768]
      startVal [time (s)] = 0.0
      units = pix
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    SoundComponent halfwayWav
      sound [set every repeat] = halfway.wav
      startVal [time (s)] = .3
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    SoundComponent halfwaySoundWav
      sound = halfway_sound.wav
      startVal [time (s)] = 0.0
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  Routine Credits
    ImageComponent Credits_text
      image = Credits.png
      size = (1229,768)
      startVal [time (s)] = 0.0
      units = pix
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    SoundComponent credits_wav
      sound = Credit.wav
      startVal [time (s)] = 0.0
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    KeyboardComponent credits_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AssentForm
    KeyboardComponent consent_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    ImageComponent consentImg
      image = AssentForm.png
      size = [1229,768]
      startVal [time (s)] = 0.0
      units = pix
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    SoundComponent assent_wav
      sound = AssentForm.wav
      startVal [time (s)] = 0.0
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Flow
  Routine exSetUp
  LoopInitiator InstLoop1 loopType="TrialHandler"
    conditionsFile = LexPracInst.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instructionpng', 'instructions1.png'), ('soundwav', 'page1.wav')]),
      OrderedDict([('instructionpng', '2instructions2.png'), ('soundwav', 'page5.wav')]),
      OrderedDict([('instructionpng', '2instructions3.png'), ('soundwav', 'page6.wav')]),
      OrderedDict([('instructionpng', '2instructions4.png'), ('soundwav', 'page7.wav')]),
      OrderedDict([('instructionpng', '2instructions5.png'), ('soundwav', 'page8.wav')])]
    Routine InstLoop
  LoopTerminator InstLoop1
  LoopInitiator pracBlock loopType="TrialHandler"
    conditionsFile = blockprac.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('words', 'by'), ('correctAns', 'right'), ('corrpng', '7instructions1.png'), ('corrwav', 'by.wav')]),
      OrderedDict([('words', 'how'), ('correctAns', 'right'), ('corrpng', '7instructions2.png'), ('corrwav', 'how.wav')]),
      OrderedDict([('words', 'set'), ('correctAns', 'right'), ('corrpng', '7instructions3.png'), ('corrwav', 'set.wav')]),
      OrderedDict([('words', 'after'), ('correctAns', 'right'), ('corrpng', '7instructions4.png'), ('corrwav', 'after.wav')]),
      OrderedDict([('words', 'determine'), ('correctAns', 'right'), ('corrpng', '7instructions5.png'), ('corrwav', 'determine.wav')]),
      OrderedDict([('words', 'py'), ('correctAns', 'left'), ('corrpng', '7instructions6.png'), ('corrwav', 'py.wav')]),
      OrderedDict([('words', 'hom'), ('correctAns', 'left'), ('corrpng', '7instructions7.png'), ('corrwav', 'hom.wav')]),
      OrderedDict([('words', 'tet'), ('correctAns', 'left'), ('corrpng', '7instructions8.png'), ('corrwav', 'tet.wav')]),
      OrderedDict([('words', 'auler'), ('correctAns', 'left'), ('corrpng', '7instructions9.png'), ('corrwav', 'auler.wav')]),
      OrderedDict([('words', 'deterbals'), ('correctAns', 'left'), ('corrpng', '7instructions10.png'), ('corrwav', 'deterbals.wav')])]
    Routine LexBlock
    Routine pCorrectSoundCode
    LoopInitiator pCorrectLoop loopType="TrialHandler"
      loopType = random
      nReps = ncorrectSound
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      Routine correctSoundPrac
    LoopTerminator pCorrectLoop
    LoopInitiator nIncorrectLoop loopType="TrialHandler"
      loopType = random
      nReps = nincorrectSound
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      Routine incorrectPrac
    LoopTerminator nIncorrectLoop
  LoopTerminator pracBlock
  Routine clericUnlock
  LoopInitiator InstLoop2 loopType="TrialHandler"
    conditions = [OrderedDict([('instructionpng', '2instructions6.png'), ('soundwav', 'page9.wav')])]
    conditionsFile = LexPracInst2.xlsx
    loopType = sequential
    nReps = 1
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    Routine InstLoop
  LoopTerminator InstLoop2
  LoopInitiator threeBlocksLoop loopType="TrialHandler"
    conditionsFile = randBlock.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('blockNum', 'block1.xlsx')]),
      OrderedDict([('blockNum', 'block2.xlsx')]),
      OrderedDict([('blockNum', 'block3.xlsx')])]
    Routine blockSetUp
    LoopInitiator blockSelecter loopType="TrialHandler"
      conditionsFile = $blockNum
      loopType = random
      nReps = 1
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      Routine LexBlock
      Routine correctSoundCode
      LoopInitiator corSoundPlay loopType="TrialHandler"
        loopType = random
        nReps = ncorrectSound
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        Routine correctSound
      LoopTerminator corSoundPlay
      LoopInitiator incorSoundPlay loopType="TrialHandler"
        loopType = random
        nReps = nincorrectSound
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        Routine inCorrSound
      LoopTerminator incorSoundPlay
      LoopInitiator animLoopPlay loopType="TrialHandler"
        loopType = random
        nReps = ncorrectAnim
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        Routine blockAnimLoop
        Routine fixateOnCross
      LoopTerminator animLoopPlay
      LoopInitiator halfway loopType="TrialHandler"
        loopType = random
        nReps = nhalfway
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        Routine halfwayBreak
      LoopTerminator halfway
    LoopTerminator blockSelecter
    LoopInitiator charUnlockDec loopType="TrialHandler"
      loopType = random
      nReps = nPlayEnd
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      Routine InnInst
      Routine charUnlock
      Routine valleyInst
    LoopTerminator charUnlockDec
  LoopTerminator threeBlocksLoop
  Routine gameEnd
  Routine Credits
